PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = TUTORIAL_6
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP " + str(reward_today) + " today" + " or" + " GBP "+ str(future_reward) + " after " + str(delay) + " days" 
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = discounting.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'reward_today': 14, 'future_reward': 20, 'delay': 7},
      {'reward_today': 19, 'future_reward': 30, 'delay': 13},
      {'reward_today': 40, 'future_reward': 51, 'delay': 21},
      {'reward_today': 54, 'future_reward': 101, 'delay': 62},
      {'reward_today': 67, 'future_reward': 147, 'delay': 89},
      {'reward_today': 109, 'future_reward': 165, 'delay': 119},
      {'reward_today': 140, 'future_reward': 214, 'delay': 162},
      {'reward_today': 157, 'future_reward': 251, 'delay': 174},
      {'reward_today': 162, 'future_reward': 258, 'delay': 200.607142857143},
      {'reward_today': 173, 'future_reward': 260, 'delay': 227.214285714286},
      {'reward_today': 192, 'future_reward': 278, 'delay': 253.821428571428},
      {'reward_today': 230, 'future_reward': 284, 'delay': 280.428571428571},
      {'reward_today': 235, 'future_reward': 291, 'delay': 307.035714285714},
      {'reward_today': 241, 'future_reward': 301, 'delay': 333.642857142857},
      {'reward_today': 243, 'future_reward': 306, 'delay': 360.25},
      {'reward_today': 250, 'future_reward': 319, 'delay': 386.857142857143},
      {'reward_today': 265, 'future_reward': 332, 'delay': 413.464285714286},
      {'reward_today': 279, 'future_reward': 377, 'delay': 440.071428571428},
      {'reward_today': 290, 'future_reward': 405, 'delay': 466.678571428571},
      {'reward_today': 302, 'future_reward': 422, 'delay': 493.285714285714},
      {'reward_today': 340, 'future_reward': 495, 'delay': 519.892857142857},
      {'reward_today': 398, 'future_reward': 541, 'delay': 546.5},
      {'reward_today': 435, 'future_reward': 561, 'delay': 573.107142857143}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
    Routine trial
  LoopTerminator trials
